PsychoPy2experiment version="2020.2.10"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=7CD28C93breakthis
  Experiment info = {'participant': '001'}
  Force stereo = False
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[1,1,1]
  expName = templeton_exp2A_fMRI_SD67
  logging level = debug
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Routines
  Routine Intro
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        win=psychoJS.window;
        Array.prototype.append = [].push;

        window.addEventListener("keydown", (event) =>
        {
            event.preventDefault();
            event.stopPropagation();
            return false;
        });

        //shuffle = util.shuffle;

        //shuffle = function(a) {
        //  var j, x, i;
        //  for (i = a.length - 1; i > 0; i--) {
        //      j = Math.floor(Math.random() * (i + 1));
        //      x = a[i];
        //      a[i] = a[j];
        //      a[j] = x;
        //  }
        //  return a;
        //}

        shuffle= function(array) {
            for (let i = array.length - 1; i > 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                [array[i], array[j]] = [array[j], array[i]];
            }
        }

        tan = function(a) {
            var value;
            value = Math.tan(a);
            return value;
        }

        mod = function(a,b) {
            var value;
            value = a % b;
            return value;
        }

        range = function(start, end) {
            var ans = [];
            for (let i = start; i < end; i++) {
                ans.push(i);
            }
            return ans;
        }
      Begin JS Routine:
        random = Math.random;

        //Math.seedrandom();

        //round = function(num, n=0) {
        //    return +(Math.round(num + ("e+" + n))  + ("e-" + n));
        //};

        timer  = new util.Clock();
        thisExp = psychoJS.experiment;
        event = psychoJS.eventManager;
    CodeComponent code_Python
      Code Type = Py
      Begin Routine:
        from numpy.random import random, shuffle
        from numpy import tan, mod

        timer  = core.Clock()
    CodeComponent code_auto
      Code Type = Auto->JS
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      Begin Routine:
        x_scale = 50
        y_scale = 50
        dist_cm = 60

        trials_per_block = 50
        num_real_blocks = 15
        num_real_trials = trials_per_block*num_real_blocks
        real_trial_index = 0

        blank_trial_start_dur_s=0.8
        mem_display_duration_s=0.5
        mem_display_to_cue_time_s=2.0           #NB. test display can precede cue.

        cue_duration_s=0.5
        retention_duration_s=0.8                #blank period following cue in retro-cue trials, before test display appears

        #----training related-----
        max_num_training_trials=300
        consecutive_retro_correct_required=8  #we're starting at the shortest delay (i.e. mem_display_to_cue_times_s[0]) and then we do some more training at a longer one (mem_display_to_cue_times_s[1])
        repeat_intructions_every=15
        mem_display_to_cue_times_training_s=[0.75,2.6]
        short_block_done = 0
        trials_long_perblock = 50
        #-------------------------

        num_images_per_display=8
        image_index_list_for_shuffling=list(range(0,num_images_per_display))

        num_images_available=10
        num_practice_trials=0

        rand_val_for_image_selection=int(round(random()*19.))

        permutation_data_file_string_practice='limited_permutations.xlsx'

        image_side_dva=2.0
        image_eccentr_dva=4.5

        outline_side_relative_to_image_eccentricity=2.5
        pointer_length_relative_to_image_eccentricity=.25

        x_y_gains_per_angle=[[0.3826834323650898, 0.9238795325112867], [0.9238795325112867, 0.38268343236508984],
                            [0.9238795325112867, -0.3826834323650897], [0.38268343236508984, -0.9238795325112867],
                            [-0.3826834323650892, -0.923879532511287], [-0.9238795325112868, -0.3826834323650895],
                            [-0.9238795325112866, 0.38268343236509], [-0.38268343236508956, 0.9238795325112868]]

        dot_diam_dva=.2

        max_height_accepted_cm=203.5
        min_height_accepted_cm=141.5

        height_offset_desktop_cm=37.42             #for curve of natural distance vs. height
        height_slope_desktop_cm_per_cm=0.1349

        height_offset_laptop_cm=-18.48
        height_slope_laptop_cm_per_cm=0.4119

        blindspot_entry_offset_cm=11.42             #for curve of natural distance vs. blind spot entry point
        blind_spot_entry_slope_cm_per_cm=3.569

        max_distance_accepted_laptop_cm=81.0        #min and max based on what was not excluded as outlier in earlier data
        min_distance_accepted_laptop_cm=22.0

        max_distance_accepted_desktop_cm=90.0
        min_distance_accepted_desktop_cm=29.0

        showDevice=1;
        showHeight=1;

        all_pic_names = ['bow.png','clown.png','car.png','book.png','bed.png','moon.png','strawberry.png','lemon.png','sun.png','flag.png']
        all_pic_names_training=['accordion.png','celery.png','anchor.png','football_helmet.png',
        'arm.png','ax.png','bike.png','corn.png','cat.png','chair.png']

        TR_length = 1.5
        max_response_time = 5*TR_length
        min_iti = 0.5
        max_duration_sd = max_response_time - min_iti

        scannerTRbutton = 'equal'
        responseButtons = ['0','1''2','3','4','5','6','7','8','9']
        experimenterReadyButton = 'minus'
    TextComponent welcome
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Welcome to the experiment!


        Press any key to continue.
    KeyboardComponent intro_continue
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent finish
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      units = norm
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      text:
        You’re done with the task!

        Thank you for your participation.
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
  Routine instruction_1
    TextComponent static_instruction
      color = black
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        As a reminder: on each trial of the experiment you will see two groups of pictures, first one group and then the other a while later.

        Your task will involve reporting whether the pictures shown in the first group are the same as the pictures shown in the second group.
    KeyboardComponent static_key1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent static_instruction_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any key to continue and  see an example of how these groups of pictures look.
      units = norm
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  Routine instruction_2
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        distance_cm = dist_cm

        image_eccentr_cm = tan(3.14159*image_eccentr_dva/180.) * distance_cm
        image_side_cm = 2. * tan(0.5*3.14159*image_side_dva/180.) * distance_cm

        random_pic_names=all_pic_names_training[:]
        shuffle(random_pic_names)
        pic_1_name=random_pic_names[0]
        array_image_1.setImage(pic_1_name, False)
        array_image_1.setPos((x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale), False)
        array_image_1.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        pic_2_name=random_pic_names[1]
        array_image_2.setImage(pic_2_name, False)
        array_image_2.setPos((x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale), False)
        array_image_2.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        pic_3_name=random_pic_names[2]
        array_image_3.setImage(pic_3_name, False)
        array_image_3.setPos((x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale), False)
        array_image_3.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        pic_4_name=random_pic_names[3]
        array_image_4.setImage(pic_4_name, False)
        array_image_4.setPos((x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale), False)
        array_image_4.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        pic_5_name=random_pic_names[4]
        array_image_5.setImage(pic_5_name, False)
        array_image_5.setPos((x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale), False)
        array_image_5.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        pic_6_name=random_pic_names[5]
        array_image_6.setImage(pic_6_name, False)
        array_image_6.setPos((x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale), False)
        array_image_6.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        pic_7_name=random_pic_names[6]
        array_image_7.setImage(pic_7_name, False)
        array_image_7.setPos((x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale), False)
        array_image_7.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        pic_8_name=random_pic_names[7]
        array_image_8.setImage(pic_8_name, False)
        array_image_8.setPos((x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale), False)
        array_image_8.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)
    TextComponent static_instruction_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The pictures you’ll see will always be arranged in a circle like this. But the specific pictures shown may differ; this is only an example.
      units = norm
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    KeyboardComponent static_key1_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent static_instruction_4
      color = black
      letterHeight = 0.05
      pos = (0, -0.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please press any key for more instructions.
      units = norm
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    ImageComponent array_image_1
      image [set every repeat] = $pic_1_name
      pos [set every repeat] = $(x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_2
      image [set every repeat] = $pic_2_name
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_3
      image [set every repeat] = $pic_3_name
      pos [set every repeat] = $(x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_4
      image [set every repeat] = $pic_4_name
      pos [set every repeat] = $(x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_5
      image [set every repeat] = $pic_5_name
      pos [set every repeat] = $(x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_6
      image [set every repeat] = $pic_6_name
      pos [set every repeat] = $(x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_7
      image [set every repeat] = $pic_7_name
      pos [set every repeat] = $(x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_8
      image [set every repeat] = $pic_8_name
      pos [set every repeat] = $(x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    PolygonComponent polygon_17
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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  Routine instruction_3
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        array_image_1b.setImage(pic_1_name, False)
        array_image_1b.setPos((x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale), False)
        array_image_1b.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_2b.setImage(pic_2_name, False)
        array_image_2b.setPos((x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale), False)
        array_image_2b.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_3b.setImage(pic_3_name, False)
        array_image_3b.setPos((x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale), False)
        array_image_3b.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_4b.setImage(pic_4_name, False)
        array_image_4b.setPos((x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale), False)
        array_image_4b.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_5b.setImage(pic_5_name, False)
        array_image_5b.setPos((x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale), False)
        array_image_5b.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_6b.setImage(pic_6_name, False)
        array_image_6b.setPos((x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale), False)
        array_image_6b.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_7b.setImage(pic_7_name, False)
        array_image_7b.setPos((x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale), False)
        array_image_7b.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_8b.setImage(pic_8_name, False)
        array_image_8b.setPos((x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale), False)
        array_image_8b.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)
    TextComponent static_instruction_15
      color = black
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 1.
      text = During each trial the first group of pictures will be shown only briefly, like the flash you just saw. After that no pictures will be on the screen for a while.
      units = norm
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    KeyboardComponent static_key1_6
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.
      store = nothing
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    TextComponent static_instruction_16
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 1.
      text = Please press any key for more instructions.
      units = norm
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    ImageComponent array_image_1b
      image [set every repeat] = $pic_1_name
      pos [set every repeat] = $(x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
      texture resolution = 512
      units = pix
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    ImageComponent array_image_2b
      image [set every repeat] = $pic_2_name
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
      texture resolution = 512
      units = pix
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    ImageComponent array_image_3b
      image [set every repeat] = $pic_3_name
      pos [set every repeat] = $(x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
      texture resolution = 512
      units = pix
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    ImageComponent array_image_4b
      image [set every repeat] = $pic_4_name
      pos [set every repeat] = $(x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
      texture resolution = 512
      units = pix
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    ImageComponent array_image_5b
      image [set every repeat] = $pic_5_name
      pos [set every repeat] = $(x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
      texture resolution = 512
      units = pix
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    ImageComponent array_image_6b
      image [set every repeat] = $pic_6_name
      pos [set every repeat] = $(x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
      texture resolution = 512
      units = pix
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    ImageComponent array_image_7b
      image [set every repeat] = $pic_7_name
      pos [set every repeat] = $(x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
      texture resolution = 512
      units = pix
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    ImageComponent array_image_8b
      image [set every repeat] = $pic_8_name
      pos [set every repeat] = $(x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
      texture resolution = 512
      units = pix
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    PolygonComponent polygon_18
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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  Routine instruction_4
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        array_image_1c.setImage(pic_1_name, False)
        array_image_1c.setPos((x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale), False)
        array_image_1c.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_2c.setImage(pic_2_name, False)
        array_image_2c.setPos((x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale), False)
        array_image_2c.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_3c.setImage(pic_3_name, False)
        array_image_3c.setPos((x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale), False)
        array_image_3c.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_4c.setImage(pic_4_name, False)
        array_image_4c.setPos((x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale), False)
        array_image_4c.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_5c.setImage(pic_5_name, False)
        array_image_5c.setPos((x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale), False)
        array_image_5c.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_6c.setImage(pic_6_name, False)
        array_image_6c.setPos((x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale), False)
        array_image_6c.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_7c.setImage(pic_7_name, False)
        array_image_7c.setPos((x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale), False)
        array_image_7c.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_8c.setImage(pic_8_name, False)
        array_image_8c.setPos((x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale), False)
        array_image_8c.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)
    TextComponent static_instruction_17
      color = black
      letterHeight = 0.05
      pos = (0, 0.75)
      saveStartStop = False
      startVal [time (s)] = 0
      text = After that pause you will see the second group of pictures. This second group will stay on the screen for as long as you want, as shown here.
      units = norm
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    KeyboardComponent static_key1_7
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    TextComponent static_instruction_18
      color = black
      letterHeight = 0.05
      pos = (0, -0.75)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Please press any key for more instructions.
      units = norm
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    ImageComponent array_image_1c
      image [set every repeat] = $pic_1_name
      pos [set every repeat] = $(x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_2c
      image [set every repeat] = $pic_2_name
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_3c
      image [set every repeat] = $pic_3_name
      pos [set every repeat] = $(x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_4c
      image [set every repeat] = $pic_4_name
      pos [set every repeat] = $(x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_5c
      image [set every repeat] = $pic_5_name
      pos [set every repeat] = $(x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_6c
      image [set every repeat] = $pic_6_name
      pos [set every repeat] = $(x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_7c
      image [set every repeat] = $pic_7_name
      pos [set every repeat] = $(x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_8c
      image [set every repeat] = $pic_8_name
      pos [set every repeat] = $(x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0
      texture resolution = 512
      units = pix
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    PolygonComponent polygon_19
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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  Routine instruction_5
    TextComponent static_instruction_19
      color = black
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        To let you know which spot along the circle you should be reporting about, there will be a red dotted line pointing to one of the eight spots, as shown here.

        So in this example your task would be to identify whether the image to the right and slightly up stayed the same between the two groups of pictures or not, because the red dotted line is pointing to the right and slightly upward.
    KeyboardComponent static_key1_8
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent static_instruction_20
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please press any key for more instructions.
      units = norm
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    PolygonComponent polygon_20
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent pointer_dot_0
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 20
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*y_scale)
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale/2., dot_diam_dva*y_scale/2.)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent pointer_dot_1
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 20
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*x_scale*.66667, x_y_gains_per_angle[1][1]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*y_scale*.66667)
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale/2., dot_diam_dva*y_scale/2.)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent pointer_dot_2
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 20
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*x_scale*.33333, x_y_gains_per_angle[1][1]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*y_scale*.33333)
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale/2., dot_diam_dva*y_scale/2.)
      startVal [time (s)] = 0.0
      units = pix
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  Routine instructions_4to5
    TextComponent static_instruction_25
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Your task will always be the same:

        To indicate whether, at one particular spot along the circle of pictures, the same picture was shown both times.

        In other words, you will indicate whether the two groups of pictures both had the same picture in one particular location.
    KeyboardComponent static_key1_11
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent static_instruction_26
      color = black
      letterHeight = 0.05
      pos = (0, -0.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please press any key for more instructions.
      units = norm
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  Routine instruction_6
    TextComponent static_instruction_27
      color = black
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        You will find that different trials will differ in details: the duration of the pause between the first and second group of pictures may vary, and the moment at which you see the red dotted line may vary, too.

        But your task will always be the same: did the two groups of pictures both have the same picture at the location indicated by red dotted line, or not?
    KeyboardComponent static_key1_12
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent static_instruction_28
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please press any key to see more instructions.
      units = norm
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    PolygonComponent polygon_24
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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  Routine practice_mem_display
    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        Image_1=all_pic_names_training[practice_trial_image_list[practice_trial_index][0]]
        array_image_1d.setImage(Image_1, False)
        array_image_1d.setPos((x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale), False)
        array_image_1d.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_2=all_pic_names_training[practice_trial_image_list[practice_trial_index][1]]
        array_image_2d.setImage(Image_2, False)
        array_image_2d.setPos((x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale), False)
        array_image_2d.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_3=all_pic_names_training[practice_trial_image_list[practice_trial_index][2]]
        array_image_3d.setImage(Image_3, False)
        array_image_3d.setPos((x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale), False)
        array_image_3d.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_4=all_pic_names_training[practice_trial_image_list[practice_trial_index][3]]
        array_image_4d.setImage(Image_4, False)
        array_image_4d.setPos((x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale), False)
        array_image_4d.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_5=all_pic_names_training[practice_trial_image_list[practice_trial_index][4]]
        array_image_5d.setImage(Image_5, False)
        array_image_5d.setPos((x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale), False)
        array_image_5d.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_6=all_pic_names_training[practice_trial_image_list[practice_trial_index][5]]
        array_image_6d.setImage(Image_6, False)
        array_image_6d.setPos((x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale), False)
        array_image_6d.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_7=all_pic_names_training[practice_trial_image_list[practice_trial_index][6]]
        array_image_7d.setImage(Image_7, False)
        array_image_7d.setPos((x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale), False)
        array_image_7d.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_8=all_pic_names_training[practice_trial_image_list[practice_trial_index][7]]
        array_image_8d.setImage(Image_8, False)
        array_image_8d.setPos((x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale), False)
        array_image_8d.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        thisExp.addData('memDisplayOnTimePractice',timer.getTime())

        #storing variables specifying trial
        for image_index in range(8):
            thisExp.addData('mem_image_'+str(image_index)+'_practice',practice_trial_image_list[practice_trial_index][image_index])
      End Routine:
        mem_display_to_cue_duration_s=mem_display_to_cue_times_practice[practice_trial_index]

        if retro_0_post_1_practice[practice_trial_index]:
            mem_display_to_test_array_duration_s=mem_display_to_cue_duration_s-.1
            routine_duration_s=mem_display_to_cue_duration_s+cue_duration_s
            response_time_s = routine_duration_s - cue_duration_s
        else:
            mem_display_to_test_array_duration_s=mem_display_to_cue_duration_s+cue_duration_s+retention_duration_s
            routine_duration_s=mem_display_to_cue_duration_s+cue_duration_s+retention_duration_s
            response_time_s = routine_duration_s

        shuffle(image_index_list_for_shuffling)
        change_from_index_practice=image_index_list_for_shuffling[0]  #create a change_from_index, even when there is no change. So you have somewhere to point the pointer.

        image_index_list_in_order=list(range(0,num_images_per_display))

        change_or_no_practice=change_0_1_practice[practice_trial_index]
        if change_or_no_practice:
            change_to_index_practice=num_images_per_display
            image_index_list_in_order[change_from_index_practice]=change_to_index_practice

        thisExp.addData('retention_interval_practice',mem_display_to_cue_duration_s)
        thisExp.addData('retro_0_post_1_practice',retro_0_post_1_practice[practice_trial_index])
        thisExp.addData('change_or_no_practice',change_or_no_practice)
        thisExp.addData('cue_location_practice',change_from_index_practice)

        thisExp.addData('mem_display_to_test_array_duration_s',mem_display_to_test_array_duration_s)
        thisExp.addData('mem_display_to_cue_duration_s',mem_display_to_cue_duration_s)
        thisExp.addData('routine_duration_s',routine_duration_s)
    ImageComponent array_image_1d
      image [set every repeat] = $Image_1
      pos [set every repeat] = $(x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_2d
      image [set every repeat] = $Image_2
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_3d
      image [set every repeat] = $Image_3
      pos [set every repeat] = $(x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_4d
      image [set every repeat] = $Image_4
      pos [set every repeat] = $(x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_5d
      image [set every repeat] = $Image_5
      pos [set every repeat] = $(x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_6d
      image [set every repeat] = $Image_6
      pos [set every repeat] = $(x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_7d
      image [set every repeat] = $Image_7
      pos [set every repeat] = $(x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_8d
      image [set every repeat] = $Image_8
      pos [set every repeat] = $(x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    PolygonComponent polygon_26
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      units = pix
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  Routine get_ready_practice
    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        if practice_trial_index == 0:
            practice_trial_text = "Get ready for practice trial 1 out of " + str(num_practice_trials)+".\n\nPlease don't forget to keep your eyes on the dot in the middle, and to use your right hand to indicate 'Same' or 'Different' using your index and middle finger, respectively."
        elif practice_trial_index >= num_practice_trials/2.:
            practice_trial_text = "Get ready for practice trial " + str(practice_trial_index+1) + " out of " + str(num_practice_trials)
        else:
            practice_trial_text = "Get ready for practice trial " + str(practice_trial_index+1) + " out of " + str(num_practice_trials)+".\n\nPlease don't forget to keep your eyes on the dot in the middle, and to use your right hand to indicate 'Same' or 'Different' with your index and middle finger, respectively, and then your left hand to indicate your confidence in that choice (ring finger=certain, middle finger=doubt, index finger=guess)."

        static_instruction_29.setText(practice_trial_text,False);
    TextComponent static_instruction_29
      color = black
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $practice_trial_text
      units = norm
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    KeyboardComponent static_key1_13
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent static_instruction_30
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please press any key to start.
      units = norm
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    PolygonComponent polygon_25
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_30
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='none';
  Routine load_practice_trials
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Experiment:
        practice_trial_load_number=0
        practice_trial_image_list = []
        retro_0_post_1_practice = []
        mem_display_to_cue_times_practice = []
        change_0_1_practice = []
      Begin Routine:
        practice_trial_image_list.append([Used_image_1,Used_image_2,Used_image_3,Used_image_4,Used_image_5,Used_image_6,Used_image_7,Used_image_8,Unused_image_1,Unused_image_2])
        if (practice_trial_load_number+1)<=num_practice_trials/2:
            retro_0_post_1_practice.append(0)
            change_0_1_practice.append(0)
        else:
            retro_0_post_1_practice.append(1)
            change_0_1_practice.append(1)

        mem_display_to_cue_times_practice.append(mem_display_to_cue_time_s)
      End Routine:
        practice_trial_load_number=practice_trial_load_number+1

        if practice_trial_load_number>=num_practice_trials:
            trials_2.finished = True

            shuffle(retro_0_post_1_practice)
            shuffle(mem_display_to_cue_times_practice)
            shuffle(change_0_1_practice)

            practice_trial_index=0
            confidence_onset_time_s=0.
            confidence_image_onset_time_s=0.
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  Routine instruction_7
    TextComponent static_instruction_31
      color = black
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        We will start with a few practice trials so that you can see for yourself.

        Before starting the practice trials: here’s one final instruction. During the trials you will see a black dot at the screen center, just like the one you see there now. It is important to keep your eyes directed at that black dot during the trials. So no looking around while a trial is ongoing.
    KeyboardComponent static_key1_14
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent static_instruction_32
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please press any key to begin the practice trials.
      units = norm
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    PolygonComponent polygon_29
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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  Routine confidence_rating_practice
    CodeComponent code_22
      Code Type = Both
      Begin JS Routine:
        if ((practice_trial_index === 0)) {
            confidence_reminder_text = "Excellent. At this point, right after each Same/Different choice, you\u2019re expected to indicate how confident you are that the choice you just made was correct.\n\nPlease use your right hand to press either O, K, or M: three keys that are located above each other on the right part of your keyboard. From top to bottom, O indicates high confidence, K indicates some doubt, and M indicates that your choice was just a guess.";
        } else {
            confidence_reminder_text = "Don't forget: after each Same/Different choice, you should indicate how confident you are in the choice you just made.\n\nPlease use your right hand to press either O (I'm certain), K (I have some doubt), or M (it was just a guess.)";
        }
        text_10.setText(confidence_reminder_text, false);

        trialLetters = ["o", "k", "m"];
        event.clearEvents()
        trialLetter='nothing'
      Begin Routine:
        if practice_trial_index==0:
            confidence_reminder_text='Excellent. At this point, right after each Same/Different choice, you’re expected to indicate how confident you are that the choice you just made was correct.\n\nPlease use your left hand and use your ring finger if you are certain, your middle finger if you have some doubt, or your index finger if it was just a guess. See image below and make your response.'
        else:
            confidence_reminder_text='Don\'t forget: after each Same/Different choice, you should indicate how confident you are in the choice you just made.\n\nPlease use your left hand to press either ring finger (I\'m certain), middle finger (I have some doubt), or index finger (it was just a guess.)'
        text_10.setText(confidence_reminder_text,False)
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);

        keys = event.getKeys();
        if (keys.length) {
            for (var letterIndex = 0, _pj_a = 3; (letterIndex < _pj_a); letterIndex += 1) {
                trialLetter = trialLetters[letterIndex];
                if (_pj.in_es6(trialLetter, keys)) {
                    thisExp.addData("practiceConfidenceKeyPressed", trialLetter);
                    thisExp.addData("confidenceKeyPressedTimePractice", timer.getTime());

                    thisExp.nextEntry();
                    continueRoutine = false;
                }
            }
            if (continueRoutine) {
                thisExp.addData("practiceIllegalKeyPressed", 1); //only reached if none of the letters in trialLetters was a hit
            }
        }
      End JS Routine:
        practice_trial_index = (practice_trial_index + 1);
        confidence_onset_time_s=5;
        confidence_image_onset_time_s=9999999;
      End Routine:
        practice_trial_index = practice_trial_index + 1
    TextComponent text_10
      color = black
      letterHeight = 0.05
      pos = (0, .65)
      startVal [time (s)] = $confidence_onset_time_s
      text [set every repeat] = $confidence_reminder_text
      units = norm
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    KeyboardComponent conf_practice_resp
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = LH_buttonbox.JPG
      pos = (0, -0.1)
      size = (0.35, 0.5)
      startVal [time (s)] = 0.0
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  Routine instruction_8
    CodeComponent code_31
      Code Type = Both
      Begin JS Routine:
        real_exp_text = (("Great. It is now time to move on to the real experiment. Your task will be exactly the same as during the practice trials you just completed, except that there will be no text on the screen anymore. Instead, you’ll only see the pictures and the red dotted line without announcements or reminders, and the experiment will automatically proceed to the next trial as soon as you’ve pressed S or D for same/different, followed by O, K, or M for your confidence.\n\nYou will, however, be given a break every " + (trials_per_block).toString() + " trials, to give your eyes a rest.\n\nThree final reminders: please keep the experiment in fullscreen mode and, outside of the breaks, please remain at the same natural position relative to the screen and keep your eyes directed at the black dot"));
        static_instruction_33.setText(real_exp_text,false);

        real_exp_text_2=(("There are " + (num_real_trials).toString() + " trials total.\n\nPlease press spacebar to begin."));
        static_instruction_34.setText(real_exp_text_2,false);
      Begin Routine:
        real_exp_text = 'Great. It is now time to move on to the real experiment. Your task will be exactly the same as during the practice trials you just completed, except that there will be no reminder texts anymore. Instead, you’ll just see the pictures and the red dotted line, and the experiment will automatically proceed to the next trial as soon as you’ve responded for same/different, and for your confidence.\n\nYou will, however, be given a break screen every ' + str(trials_per_block) + ' trials, to give you a breather.'

        real_exp_text_2='There are ' + str(num_real_trials) + ' trials total.\n\nPlease press any key to begin.'
    TextComponent static_instruction_33
      color = black
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $subj_ready.keys
      text [set every repeat] = $real_exp_text
      units = norm
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    KeyboardComponent subj_ready
      allowedKeys = responseButtons
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [condition] = $subj_ready.keys
      store = first key
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    TextComponent static_instruction_34
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $subj_ready.keys
      text [set every repeat] = $real_exp_text_2
      units = norm
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    PolygonComponent polygon_31
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      stopVal [condition] = $subj_ready.keys
      units = pix
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    KeyboardComponent experimenter_ready
      allowedKeys = experimenterReadyButton
      forceEndRoutine = True
      startVal [condition] = $subj_ready.keys
      stopVal [condition] = $experimenter_ready.keys
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    TextComponent sub_ready
      color = black
      letterHeight = 0.05
      startVal [condition] = $subj_ready.keys
      text = Standy by...
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  Routine load_real_trials
    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Experiment:
        trial_load_number=0
        real_trial_image_list = []
        retro_0_post_1_real = []
        change_0_1_real = []
        cued_locations_real = []
        retint_s = []
        #-------
      Begin Routine:
        real_trial_image_list.append([Used_image_1,Used_image_2,Used_image_3,Used_image_4,Used_image_5,Used_image_6,Used_image_7,Used_image_8,Unused_image_1,Unused_image_2])
        retro_0_post_1_real.append(Retro_post_0_1)
        change_0_1_real.append(Change_yes_no)
        retint_s.append(Ret_int)

        thisExp.addData('DataFile',condFile)
      End Routine:
        trial_load_number=trial_load_number+1

        if trial_load_number>=num_real_trials:
            trials_7.finished = True
            real_trial_index=0
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  Routine real_mem_display
    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Routine:
        Image_1=all_pic_names[real_trial_image_list[real_trial_index][0]]
        array_image_1h.setImage(Image_1, False)
        array_image_1h.setPos((x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale), False)
        array_image_1h.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_2=all_pic_names[real_trial_image_list[real_trial_index][1]]
        array_image_2h.setImage(Image_2, False)
        array_image_2h.setPos((x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale), False)
        array_image_2h.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_3=all_pic_names[real_trial_image_list[real_trial_index][2]]
        array_image_3h.setImage(Image_3, False)
        array_image_3h.setPos((x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale), False)
        array_image_3h.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_4=all_pic_names[real_trial_image_list[real_trial_index][3]]
        array_image_4h.setImage(Image_4, False)
        array_image_4h.setPos((x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale), False)
        array_image_4h.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_5=all_pic_names[real_trial_image_list[real_trial_index][4]]
        array_image_5h.setImage(Image_5, False)
        array_image_5h.setPos((x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale), False)
        array_image_5h.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_6=all_pic_names[real_trial_image_list[real_trial_index][5]]
        array_image_6h.setImage(Image_6, False)
        array_image_6h.setPos((x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale), False)
        array_image_6h.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_7=all_pic_names[real_trial_image_list[real_trial_index][6]]
        array_image_7h.setImage(Image_7, False)
        array_image_7h.setPos((x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale), False)
        array_image_7h.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_8=all_pic_names[real_trial_image_list[real_trial_index][7]]
        array_image_8h.setImage(Image_8, False)
        array_image_8h.setPos((x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale), False)
        array_image_8h.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        thisExp.addData('memDisplayOnTime',timer.getTime())
        #storing variables specifying trial
        for image_index in range(8):
            thisExp.addData('mem_image_'+str(image_index)+'_real',real_trial_image_list[real_trial_index][image_index])
      End Routine:
        ret_int = retint_s[real_trial_index]
        mem_display_to_cue_duration_s=ret_int

        if retro_0_post_1_real[real_trial_index]:
            mem_display_to_test_array_duration_s=mem_display_to_cue_duration_s-.1
            routine_duration_s=mem_display_to_cue_duration_s+cue_duration_s
            response_time_s = routine_duration_s-cue_duration_s
        else:
            mem_display_to_test_array_duration_s=mem_display_to_cue_duration_s+cue_duration_s+retention_duration_s
            routine_duration_s=mem_display_to_cue_duration_s+cue_duration_s+retention_duration_s
            response_time_s = routine_duration_s

        shuffle(image_index_list_for_shuffling)
        change_from_index_real=image_index_list_for_shuffling[0]  #create a change_from_index, even when there is no change. So you have somewhere to point the pointer.

        image_index_list_in_order=list(range(0,num_images_per_display))

        change_or_no_real=change_0_1_real[real_trial_index]
        if change_or_no_real:
            change_to_index_real=num_images_per_display
            image_index_list_in_order[change_from_index_real]=change_to_index_real

        thisExp.addData('retention_interval_real',mem_display_to_cue_duration_s)
        thisExp.addData('retro_0_post_1_real',retro_0_post_1_real[real_trial_index])
        thisExp.addData('change_or_no_real',change_or_no_real)
        thisExp.addData('cue_location_real',change_from_index_real)
        thisExp.addData('ret_int_real',ret_int)
    ImageComponent array_image_1h
      image [set every repeat] = $Image_1
      pos [set every repeat] = $(x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_2h
      image [set every repeat] = $Image_2
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_3h
      image [set every repeat] = $Image_3
      pos [set every repeat] = $(x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_4h
      image [set every repeat] = $Image_4
      pos [set every repeat] = $(x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_5h
      image [set every repeat] = $Image_5
      pos [set every repeat] = $(x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_6h
      image [set every repeat] = $Image_6
      pos [set every repeat] = $(x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_7h
      image [set every repeat] = $Image_7
      pos [set every repeat] = $(x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_8h
      image [set every repeat] = $Image_8
      pos [set every repeat] = $(x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    PolygonComponent polygon_33
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      units = pix
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
  Routine instruction_67
    TextComponent static_instruction_37
      color = black
      letterHeight = 0.05
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = To indicate your response you’ll use your right hand; press the left button with your index finger if the two groups of pictures both had the same picture at the location indicated by the red dotted line, or press the right button with your middle finger if two different pictures were shown at that location. See the image below:
      units = norm
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    KeyboardComponent static_key1_17
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent static_instruction_38
      color = black
      letterHeight = 0.05
      pos = (0, -0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        You will not be explicitly prompted when to give your response: you can simply press one of the two response keys as soon as you’ve seen both groups of pictures as well as the red dotted line indicating the location.

        Please press any key to see more instructions.
    ImageComponent SD_image
      image = RH_buttonbox_V1.jpg
      size = (0.4, 0.5)
      startVal [time (s)] = 0.0
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  Routine instruction_67b
    TextComponent static_instruction_39
      color = black
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You will find that some trials are easy, yet that on other trials you have no idea and have to guess. That’s okay: immediately after each Same/Different response you get a chance to indicate how sure you were of that response.
      units = norm
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    KeyboardComponent static_key1_18
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent static_instruction_40
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please press any key to see more instructions.
      units = norm
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    PolygonComponent polygon_37
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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
  Routine blank_at_trial_start
    PolygonComponent polygon_39
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $blank_trial_start_dur_s
      units = pix
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  Routine confidence_rating_real_2
    CodeComponent code_42
      Code Type = Both
      Begin Routine:
        elapsed_response_time = expClock.getTime() - sd_time_start

        remaining_response_time = max_response_time - min_iti - elapsed_response_time
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);

        keys = event.getKeys();
        if (keys.length) {
            for (var letterIndex = 0, _pj_a = 3; (letterIndex < _pj_a); letterIndex += 1) {
                trialLetter = trialLetters[letterIndex];
                if (_pj.in_es6(trialLetter, keys)) {
                    thisExp.addData("confidenceKeyPressed", trialLetter);
                    thisExp.addData("confidenceKeyPressedTime", timer.getTime());
                    thisExp.nextEntry();
                    continueRoutine = false;
                }
            }
            if (continueRoutine) {
                thisExp.addData("illegalKeyPressed", 1); //only reached if none of the letters in trialLetters was a hit
            }
        }
      End JS Routine:
        real_trial_index = (real_trial_index + 1);
      End Routine:
        thisExp.addData('real_trial_index',real_trial_index)
        real_trial_index = real_trial_index + 1

        if (real_trial_index>=num_real_trials):
            trials_8.finished = True
    KeyboardComponent conf_real_resp
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $remaining_response_time
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
  Routine retention_cue_and_test_intval_real
    PolygonComponent polygon_34
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_27
      Code Type = Auto->JS
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      Begin Experiment:
        expClock = core.Clock()
      Begin Routine:
        sd_time_start = expClock.getTime() + response_time_s

        Image_1=all_pic_names[real_trial_image_list[real_trial_index][image_index_list_in_order[0]]]
        array_image_1j.setImage(Image_1, False)
        array_image_1j.setPos((x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale), False)
        array_image_1j.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_2=all_pic_names[real_trial_image_list[real_trial_index][image_index_list_in_order[1]]]
        array_image_2j.setImage(Image_2, False)
        array_image_2j.setPos((x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale), False)
        array_image_2j.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_3=all_pic_names[real_trial_image_list[real_trial_index][image_index_list_in_order[2]]]
        array_image_3j.setImage(Image_3, False)
        array_image_3j.setPos((x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale), False)
        array_image_3j.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_4=all_pic_names[real_trial_image_list[real_trial_index][image_index_list_in_order[3]]]
        array_image_4j.setImage(Image_4, False)
        array_image_4j.setPos((x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale), False)
        array_image_4j.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_5=all_pic_names[real_trial_image_list[real_trial_index][image_index_list_in_order[4]]]
        array_image_5j.setImage(Image_5, False)
        array_image_5j.setPos((x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale), False)
        array_image_5j.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_6=all_pic_names[real_trial_image_list[real_trial_index][image_index_list_in_order[5]]]
        array_image_6j.setImage(Image_6, False)
        array_image_6j.setPos((x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale), False)
        array_image_6j.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_7=all_pic_names[real_trial_image_list[real_trial_index][image_index_list_in_order[6]]]
        array_image_7j.setImage(Image_7, False)
        array_image_7j.setPos((x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale), False)
        array_image_7j.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_8=all_pic_names[real_trial_image_list[real_trial_index][image_index_list_in_order[7]]]
        array_image_8j.setImage(Image_8, False)
        array_image_8j.setPos((x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale), False)
        array_image_8j.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        x_pointer_0=x_y_gains_per_angle[change_from_index_real][0]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*x_scale
        y_pointer_0=x_y_gains_per_angle[change_from_index_real][1]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*y_scale
        pointer_dot_0c.setPos((x_pointer_0, y_pointer_0), False)

        x_pointer_1=x_pointer_0*.66667
        y_pointer_1=y_pointer_0*.66667
        pointer_dot_1c.setPos((x_pointer_1, y_pointer_1), False)

        x_pointer_2=x_pointer_0*.33333
        y_pointer_2=y_pointer_0*.33333
        pointer_dot_2c.setPos((x_pointer_2, y_pointer_2), False)
      Each Frame:
        currTime = expClock.getTime()

        if currTime >= sd_time_start + max_duration_sd:
            continueRoutine = False
    ImageComponent array_image_1j
      image [set every repeat] = $Image_1
      pos [set every repeat] = $(x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_2j
      image [set every repeat] = $Image_2
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_3j
      image [set every repeat] = $Image_3
      pos [set every repeat] = $(x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_4j
      image [set every repeat] = $Image_4
      pos [set every repeat] = $(x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_5j
      image [set every repeat] = $Image_5
      pos [set every repeat] = $(x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_6j
      image [set every repeat] = $Image_6
      pos [set every repeat] = $(x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_7j
      image [set every repeat] = $Image_7
      pos [set every repeat] = $(x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_8j
      image [set every repeat] = $Image_8
      pos [set every repeat] = $(x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    PolygonComponent pointer_dot_0c
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 20
      pos [set every repeat] = $(x_pointer_0,y_pointer_0)
      shape = regular polygon...
      size [set every repeat] = $(dot_diam_dva*x_scale/2., dot_diam_dva*y_scale/2.)
      startVal [time (s)] = $mem_display_to_cue_duration_s
      stopVal [duration (s)] = $cue_duration_s
      units = pix
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    PolygonComponent pointer_dot_1c
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 20
      pos [set every repeat] = $(x_pointer_1,y_pointer_1)
      shape = regular polygon...
      size [set every repeat] = $(dot_diam_dva*x_scale/2., dot_diam_dva*y_scale/2.)
      startVal [time (s)] = $mem_display_to_cue_duration_s
      stopVal [duration (s)] = $cue_duration_s
      units = pix
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    PolygonComponent pointer_dot_2c
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 20
      pos [set every repeat] = $(x_pointer_2,y_pointer_2)
      shape = regular polygon...
      size [set every repeat] = $(dot_diam_dva*x_scale/2., dot_diam_dva*y_scale/2.)
      startVal [time (s)] = $mem_display_to_cue_duration_s
      stopVal [duration (s)] = $cue_duration_s
      units = pix
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    KeyboardComponent sd_resp_real
      allowedKeys = '6','7'
      forceEndRoutine = True
      startVal [time (s)] = $response_time_s
      stopVal [duration (s)] = $max_duration_sd
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
  Routine retention_cue_and_test_intval_practice_2
    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        Image_1=all_pic_names_training[practice_trial_image_list[practice_trial_index][image_index_list_in_order[0]]]
        array_image_1f.setImage(Image_1, False)
        array_image_1f.setPos((x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale), False)
        array_image_1f.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_2=all_pic_names_training[practice_trial_image_list[practice_trial_index][image_index_list_in_order[1]]]
        array_image_2f.setImage(Image_2, False)
        array_image_2f.setPos((x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale), False)
        array_image_2f.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_3=all_pic_names_training[practice_trial_image_list[practice_trial_index][image_index_list_in_order[2]]]
        array_image_3f.setImage(Image_3, False)
        array_image_3f.setPos((x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale), False)
        array_image_3f.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_4=all_pic_names_training[practice_trial_image_list[practice_trial_index][image_index_list_in_order[3]]]
        array_image_4f.setImage(Image_4, False)
        array_image_4f.setPos((x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale), False)
        array_image_4f.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_5=all_pic_names_training[practice_trial_image_list[practice_trial_index][image_index_list_in_order[4]]]
        array_image_5f.setImage(Image_5, False)
        array_image_5f.setPos((x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale), False)
        array_image_5f.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_6=all_pic_names_training[practice_trial_image_list[practice_trial_index][image_index_list_in_order[5]]]
        array_image_6f.setImage(Image_6, False)
        array_image_6f.setPos((x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale), False)
        array_image_6f.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_7=all_pic_names_training[practice_trial_image_list[practice_trial_index][image_index_list_in_order[6]]]
        array_image_7f.setImage(Image_7, False)
        array_image_7f.setPos((x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale), False)
        array_image_7f.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_8=all_pic_names_training[practice_trial_image_list[practice_trial_index][image_index_list_in_order[7]]]
        array_image_8f.setImage(Image_8, False)
        array_image_8f.setPos((x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale), False)
        array_image_8f.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        x_pointer_0=x_y_gains_per_angle[change_from_index_practice][0]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*x_scale
        y_pointer_0=x_y_gains_per_angle[change_from_index_practice][1]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*y_scale
        pointer_dot_0b.setPos((x_pointer_0, y_pointer_0), False)

        x_pointer_1=x_pointer_0*.66667
        y_pointer_1=y_pointer_0*.66667
        pointer_dot_1b.setPos((x_pointer_1, y_pointer_1), False)

        x_pointer_2=x_pointer_0*.33333
        y_pointer_2=y_pointer_0*.33333
        pointer_dot_2b.setPos((x_pointer_2, y_pointer_2), False)
    PolygonComponent polygon_28
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent array_image_1f
      image [set every repeat] = $Image_1
      pos [set every repeat] = $(x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_2f
      image [set every repeat] = $Image_2
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_3f
      image [set every repeat] = $Image_3
      pos [set every repeat] = $(x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_4f
      image [set every repeat] = $Image_4
      pos [set every repeat] = $(x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_5f
      image [set every repeat] = $Image_5
      pos [set every repeat] = $(x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_6f
      image [set every repeat] = $Image_6
      pos [set every repeat] = $(x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_7f
      image [set every repeat] = $Image_7
      pos [set every repeat] = $(x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_8f
      image [set every repeat] = $Image_8
      pos [set every repeat] = $(x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    PolygonComponent pointer_dot_0b
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 20
      pos [set every repeat] = $(x_pointer_0,y_pointer_0)
      shape = regular polygon...
      size [set every repeat] = $(dot_diam_dva*x_scale/2., dot_diam_dva*y_scale/2.)
      startVal [time (s)] = $mem_display_to_cue_duration_s
      stopVal [duration (s)] = $cue_duration_s
      units = pix
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    PolygonComponent pointer_dot_1b
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 20
      pos [set every repeat] = $(x_pointer_1,y_pointer_1)
      shape = regular polygon...
      size [set every repeat] = $(dot_diam_dva*x_scale/2., dot_diam_dva*y_scale/2.)
      startVal [time (s)] = $mem_display_to_cue_duration_s
      stopVal [duration (s)] = $cue_duration_s
      units = pix
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    PolygonComponent pointer_dot_2b
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 20
      pos [set every repeat] = $(x_pointer_2,y_pointer_2)
      shape = regular polygon...
      size [set every repeat] = $(dot_diam_dva*x_scale/2., dot_diam_dva*y_scale/2.)
      startVal [time (s)] = $mem_display_to_cue_duration_s
      stopVal [duration (s)] = $cue_duration_s
      units = pix
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    KeyboardComponent sd_practice_resp
      allowedKeys = '6', '7'
      forceEndRoutine = True
      startVal [time (s)] = $response_time_s
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  Routine fixation_minimum
    PolygonComponent polygon
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.48
      units = pix
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  Routine break_between_runs
    CodeComponent break_text
      Code Type = Auto->JS
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      Begin Experiment:
        break_text='doh!' #if this comes up we forgot to update the msg!
      Begin Routine:
        break_text = 'You finished a block of '+str(trials_per_block)+' trials. In total you have now completed '+str(real_trial_index)+' trials out of '+ str(num_real_trials) + '.\n\nTake a brief break if desired.\n\n Please press any button to continue.'
    TextComponent break_text_presentation
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $resp_subj_ready.keys
      text [set every repeat] = $break_text
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    KeyboardComponent resp_subj_ready
      allowedKeys = responseButtons
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $resp_subj_ready.keys
      store = first key
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    KeyboardComponent resp_experimenter_ready
      allowedKeys = experimenterReadyButton
      forceEndRoutine = True
      startVal [condition] = $resp_subj_ready.keys
      stopVal [condition] = $resp_experimenter_ready.keys
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    TextComponent subject_ready_text
      color = black
      letterHeight = 0.05
      startVal [condition] = $resp_subj_ready.keys
      text = Stand by...
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
  Routine TR_sync
    KeyboardComponent wait_for_TR
      allowedKeys = scannerTRbutton
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    PolygonComponent polygon_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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Flow
  Routine Intro
  Routine instruction_1
  Routine instruction_2
  Routine instruction_3
  Routine instruction_4
  Routine instructions_4to5
  Routine instruction_5
  Routine instruction_6
  Routine instruction_67
  Routine instruction_67b
  Routine instruction_7
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $permutation_data_file_string_practice
    isTrials = False
    loopType = random
    nReps = 1
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    Routine load_practice_trials
  LoopTerminator trials_2
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = $num_practice_trials
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    Routine get_ready_practice
    Routine blank_at_trial_start
    Routine practice_mem_display
    Routine retention_cue_and_test_intval_practice_2
    Routine confidence_rating_practice
  LoopTerminator trials
  Routine instruction_8
  LoopInitiator main_exp_blocks loopType="TrialHandler"
    conditionsFile = main_exp_condFiles.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condFile', 'limited_perms_conds_1.csv')]),
      OrderedDict([('condFile', 'limited_perms_conds_2.csv')]),
      OrderedDict([('condFile', 'limited_perms_conds_3.csv')]),
      OrderedDict([('condFile', 'limited_perms_conds_4.csv')]),
      OrderedDict([('condFile', 'limited_perms_conds_5.csv')]),
      OrderedDict([('condFile', 'limited_perms_conds_6.csv')]),
      OrderedDict([('condFile', 'limited_perms_conds_7.csv')]),
      OrderedDict([('condFile', 'limited_perms_conds_8.csv')]),
      OrderedDict([('condFile', 'limited_perms_conds_9.csv')]),
      OrderedDict([('condFile', 'limited_perms_conds_10.csv')])]
    LoopInitiator trials_7 loopType="TrialHandler"
      conditionsFile = $condFile
      isTrials = False
      loopType = random
      nReps = 1
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      Routine load_real_trials
    LoopTerminator trials_7
    LoopInitiator trials_8 loopType="TrialHandler"
      loopType = random
      nReps = $trials_per_block
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      Routine TR_sync
      Routine real_mem_display
      Routine retention_cue_and_test_intval_real
      Routine confidence_rating_real_2
      Routine fixation_minimum
    LoopTerminator trials_8
    Routine break_between_runs
  LoopTerminator main_exp_blocks
  Routine End
