PsychoPy2experiment version="2020.2.10"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=7CD28C93breakthis
  Experiment info = {'participant': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[1,1,1]
  expName = templeton_exp2A_SD67_fMRI_training
  logging level = debug
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Routines
  Routine Intro
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        win=psychoJS.window;
        Array.prototype.append = [].push;

        window.addEventListener("keydown", (event) =>
        {
            event.preventDefault();
            event.stopPropagation();
            return false;
        });

        //shuffle = util.shuffle;

        //shuffle = function(a) {
        //  var j, x, i;
        //  for (i = a.length - 1; i > 0; i--) {
        //      j = Math.floor(Math.random() * (i + 1));
        //      x = a[i];
        //      a[i] = a[j];
        //      a[j] = x;
        //  }
        //  return a;
        //}

        shuffle= function(array) {
            for (let i = array.length - 1; i > 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                [array[i], array[j]] = [array[j], array[i]];
            }
        }

        tan = function(a) {
            var value;
            value = Math.tan(a);
            return value;
        }

        mod = function(a,b) {
            var value;
            value = a % b;
            return value;
        }

        range = function(start, end) {
            var ans = [];
            for (let i = start; i < end; i++) {
                ans.push(i);
            }
            return ans;
        }
      Begin JS Routine:
        random = Math.random;

        //Math.seedrandom();

        //round = function(num, n=0) {
        //    return +(Math.round(num + ("e+" + n))  + ("e-" + n));
        //};

        timer  = new util.Clock();
        thisExp = psychoJS.experiment;
        event = psychoJS.eventManager;
    CodeComponent code_Python
      Code Type = Py
      Begin Routine:
        from numpy.random import random, shuffle
        from numpy import tan, mod

        timer  = core.Clock()
    CodeComponent code_auto
      Code Type = Auto->JS
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      Begin Routine:
        x_scale = 50
        y_scale = 50
        dist_cm = 60

        trials_per_block = 50
        num_real_blocks = 10
        num_real_trials = trials_per_block*num_real_blocks
        real_trial_index = 0

        blank_trial_start_dur_s=0.8
        mem_display_duration_s=0.5
        mem_display_to_cue_time_s=2.0           #NB. test display can precede cue.

        cue_duration_s=0.5
        retention_duration_s=0.8                #blank period following cue in retro-cue trials, before test display appears

        #----training related-----
        max_num_training_trials=300
        consecutive_retro_correct_required=8  #we're starting at the shortest delay (i.e. mem_display_to_cue_times_s[0]) and then we do some more training at a longer one (mem_display_to_cue_times_s[1])
        repeat_intructions_every=15
        short_retint=0.75
        varying_long_retints=[1.6+0.2*counter for counter in range(11)]
        short_block_done = 0
        trials_long_perblock = 50
        #-------------------------

        num_images_per_display=8
        image_index_list_for_shuffling=list(range(0,num_images_per_display))

        num_images_available=10
        num_practice_trials=0

        rand_val_for_image_selection=int(round(random()*19.))

        permutation_data_file_string_practice='limited_permutations.xlsx'

        image_side_dva=2.0
        image_eccentr_dva=4.5

        outline_side_relative_to_image_eccentricity=2.5
        pointer_length_relative_to_image_eccentricity=.25

        x_y_gains_per_angle=[[0.3826834323650898, 0.9238795325112867], [0.9238795325112867, 0.38268343236508984],
                            [0.9238795325112867, -0.3826834323650897], [0.38268343236508984, -0.9238795325112867],
                            [-0.3826834323650892, -0.923879532511287], [-0.9238795325112868, -0.3826834323650895],
                            [-0.9238795325112866, 0.38268343236509], [-0.38268343236508956, 0.9238795325112868]]

        dot_diam_dva=.2

        max_height_accepted_cm=203.5
        min_height_accepted_cm=141.5

        height_offset_desktop_cm=37.42             #for curve of natural distance vs. height
        height_slope_desktop_cm_per_cm=0.1349

        height_offset_laptop_cm=-18.48
        height_slope_laptop_cm_per_cm=0.4119

        blindspot_entry_offset_cm=11.42             #for curve of natural distance vs. blind spot entry point
        blind_spot_entry_slope_cm_per_cm=3.569

        max_distance_accepted_laptop_cm=81.0        #min and max based on what was not excluded as outlier in earlier data
        min_distance_accepted_laptop_cm=22.0

        max_distance_accepted_desktop_cm=90.0
        min_distance_accepted_desktop_cm=29.0

        showDevice=1;
        showHeight=1;

        all_pic_names = ['bow.png','clown.png','car.png','book.png','bed.png','moon.png','strawberry.png','lemon.png','sun.png','flag.png']
        all_pic_names_training=['accordion.png','celery.png','anchor.png','football_helmet.png',
        'arm.png','ax.png','bike.png','corn.png','cat.png','chair.png']
    TextComponent welcome
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Welcome to the training session!


        Press any button to continue.
    KeyboardComponent intro_continue
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent finish
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      units = norm
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      text:
        You’re done with the task!

        Thank you for your participation.
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
  Routine instruction_1
    TextComponent static_instruction
      color = black
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        On each trial of the experiment you will see two groups of pictures, first one group and then the other a while later.

        Your task will involve reporting whether the pictures shown in the first group are the same as the pictures shown in the second group.
    KeyboardComponent static_key1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent static_instruction_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any button to continue and  see an example of how these groups of pictures look.
      units = norm
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  Routine instruction_2
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        distance_cm = dist_cm

        image_eccentr_cm = tan(3.14159*image_eccentr_dva/180.) * distance_cm
        image_side_cm = 2. * tan(0.5*3.14159*image_side_dva/180.) * distance_cm

        random_pic_names=all_pic_names_training[:]
        shuffle(random_pic_names)
        pic_1_name=random_pic_names[0]
        array_image_1.setImage(pic_1_name, False)
        array_image_1.setPos((x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale), False)
        array_image_1.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        pic_2_name=random_pic_names[1]
        array_image_2.setImage(pic_2_name, False)
        array_image_2.setPos((x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale), False)
        array_image_2.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        pic_3_name=random_pic_names[2]
        array_image_3.setImage(pic_3_name, False)
        array_image_3.setPos((x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale), False)
        array_image_3.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        pic_4_name=random_pic_names[3]
        array_image_4.setImage(pic_4_name, False)
        array_image_4.setPos((x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale), False)
        array_image_4.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        pic_5_name=random_pic_names[4]
        array_image_5.setImage(pic_5_name, False)
        array_image_5.setPos((x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale), False)
        array_image_5.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        pic_6_name=random_pic_names[5]
        array_image_6.setImage(pic_6_name, False)
        array_image_6.setPos((x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale), False)
        array_image_6.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        pic_7_name=random_pic_names[6]
        array_image_7.setImage(pic_7_name, False)
        array_image_7.setPos((x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale), False)
        array_image_7.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        pic_8_name=random_pic_names[7]
        array_image_8.setImage(pic_8_name, False)
        array_image_8.setPos((x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale), False)
        array_image_8.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)
    TextComponent static_instruction_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The pictures you’ll see will always be arranged in a circle like this. But the specific pictures shown may differ; this is only an example.
      units = norm
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    KeyboardComponent static_key1_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent static_instruction_4
      color = black
      letterHeight = 0.05
      pos = (0, -0.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please press any button for more instructions.
      units = norm
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    ImageComponent array_image_1
      image [set every repeat] = $pic_1_name
      pos [set every repeat] = $(x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_2
      image [set every repeat] = $pic_2_name
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_3
      image [set every repeat] = $pic_3_name
      pos [set every repeat] = $(x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_4
      image [set every repeat] = $pic_4_name
      pos [set every repeat] = $(x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_5
      image [set every repeat] = $pic_5_name
      pos [set every repeat] = $(x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_6
      image [set every repeat] = $pic_6_name
      pos [set every repeat] = $(x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_7
      image [set every repeat] = $pic_7_name
      pos [set every repeat] = $(x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_8
      image [set every repeat] = $pic_8_name
      pos [set every repeat] = $(x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    PolygonComponent polygon_17
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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  Routine instruction_3
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        array_image_1b.setImage(pic_1_name, False)
        array_image_1b.setPos((x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale), False)
        array_image_1b.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_2b.setImage(pic_2_name, False)
        array_image_2b.setPos((x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale), False)
        array_image_2b.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_3b.setImage(pic_3_name, False)
        array_image_3b.setPos((x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale), False)
        array_image_3b.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_4b.setImage(pic_4_name, False)
        array_image_4b.setPos((x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale), False)
        array_image_4b.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_5b.setImage(pic_5_name, False)
        array_image_5b.setPos((x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale), False)
        array_image_5b.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_6b.setImage(pic_6_name, False)
        array_image_6b.setPos((x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale), False)
        array_image_6b.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_7b.setImage(pic_7_name, False)
        array_image_7b.setPos((x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale), False)
        array_image_7b.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_8b.setImage(pic_8_name, False)
        array_image_8b.setPos((x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale), False)
        array_image_8b.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)
    TextComponent static_instruction_15
      color = black
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 1.
      text = During each trial the first group of pictures will be shown only briefly, like the flash you just saw. After that no pictures will be on the screen for a while.
      units = norm
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    KeyboardComponent static_key1_6
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.
      store = nothing
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    TextComponent static_instruction_16
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 1.
      text = Please press any button for more instructions.
      units = norm
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    ImageComponent array_image_1b
      image [set every repeat] = $pic_1_name
      pos [set every repeat] = $(x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
      texture resolution = 512
      units = pix
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    ImageComponent array_image_2b
      image [set every repeat] = $pic_2_name
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
      texture resolution = 512
      units = pix
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    ImageComponent array_image_3b
      image [set every repeat] = $pic_3_name
      pos [set every repeat] = $(x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
      texture resolution = 512
      units = pix
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    ImageComponent array_image_4b
      image [set every repeat] = $pic_4_name
      pos [set every repeat] = $(x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
      texture resolution = 512
      units = pix
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    ImageComponent array_image_5b
      image [set every repeat] = $pic_5_name
      pos [set every repeat] = $(x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
      texture resolution = 512
      units = pix
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    ImageComponent array_image_6b
      image [set every repeat] = $pic_6_name
      pos [set every repeat] = $(x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
      texture resolution = 512
      units = pix
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    ImageComponent array_image_7b
      image [set every repeat] = $pic_7_name
      pos [set every repeat] = $(x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
      texture resolution = 512
      units = pix
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    ImageComponent array_image_8b
      image [set every repeat] = $pic_8_name
      pos [set every repeat] = $(x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
      texture resolution = 512
      units = pix
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    PolygonComponent polygon_18
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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  Routine instruction_4
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        array_image_1c.setImage(pic_1_name, False)
        array_image_1c.setPos((x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale), False)
        array_image_1c.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_2c.setImage(pic_2_name, False)
        array_image_2c.setPos((x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale), False)
        array_image_2c.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_3c.setImage(pic_3_name, False)
        array_image_3c.setPos((x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale), False)
        array_image_3c.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_4c.setImage(pic_4_name, False)
        array_image_4c.setPos((x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale), False)
        array_image_4c.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_5c.setImage(pic_5_name, False)
        array_image_5c.setPos((x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale), False)
        array_image_5c.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_6c.setImage(pic_6_name, False)
        array_image_6c.setPos((x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale), False)
        array_image_6c.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_7c.setImage(pic_7_name, False)
        array_image_7c.setPos((x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale), False)
        array_image_7c.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        array_image_8c.setImage(pic_8_name, False)
        array_image_8c.setPos((x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale), False)
        array_image_8c.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)
    TextComponent static_instruction_17
      color = black
      letterHeight = 0.05
      pos = (0, 0.75)
      saveStartStop = False
      startVal [time (s)] = 0
      text = After that pause you will see the second group of pictures. This second group will stay on the screen for as long as you want, as shown here.
      units = norm
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    KeyboardComponent static_key1_7
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    TextComponent static_instruction_18
      color = black
      letterHeight = 0.05
      pos = (0, -0.75)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Please press any button for more instructions.
      units = norm
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    ImageComponent array_image_1c
      image [set every repeat] = $pic_1_name
      pos [set every repeat] = $(x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_2c
      image [set every repeat] = $pic_2_name
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_3c
      image [set every repeat] = $pic_3_name
      pos [set every repeat] = $(x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_4c
      image [set every repeat] = $pic_4_name
      pos [set every repeat] = $(x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_5c
      image [set every repeat] = $pic_5_name
      pos [set every repeat] = $(x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_6c
      image [set every repeat] = $pic_6_name
      pos [set every repeat] = $(x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_7c
      image [set every repeat] = $pic_7_name
      pos [set every repeat] = $(x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0
      texture resolution = 512
      units = pix
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    ImageComponent array_image_8c
      image [set every repeat] = $pic_8_name
      pos [set every repeat] = $(x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0
      texture resolution = 512
      units = pix
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    PolygonComponent polygon_19
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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  Routine instruction_5
    TextComponent static_instruction_19
      color = black
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        To let you know which spot along the circle you should be reporting about, there will be a red dotted line pointing to one of the eight spots, as shown here.

        So in this example your task would be to identify whether the image to the right and slightly up stayed the same between the two groups of pictures or not, because the red dotted line is pointing to the right and slightly upward.
    KeyboardComponent static_key1_8
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent static_instruction_20
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please press any button for more instructions.
      units = norm
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    PolygonComponent polygon_20
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent pointer_dot_0
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 20
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*y_scale)
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale/2., dot_diam_dva*y_scale/2.)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent pointer_dot_1
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 20
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*x_scale*.66667, x_y_gains_per_angle[1][1]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*y_scale*.66667)
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale/2., dot_diam_dva*y_scale/2.)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent pointer_dot_2
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 20
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*x_scale*.33333, x_y_gains_per_angle[1][1]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*y_scale*.33333)
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale/2., dot_diam_dva*y_scale/2.)
      startVal [time (s)] = 0.0
      units = pix
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  Routine instructions_4to5
    TextComponent static_instruction_25
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Your task will always be the same:

        To indicate whether, at one particular spot along the circle of pictures, the same picture was shown both times.

        In other words, you will indicate whether the two groups of pictures both had the same picture in one particular location.
    KeyboardComponent static_key1_11
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent static_instruction_26
      color = black
      letterHeight = 0.05
      pos = (0, -0.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please press any button for more instructions.
      units = norm
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  Routine instruction_6
    TextComponent static_instruction_27
      color = black
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        You will find that different trials will differ in details: the duration of the pause between the first and second group of pictures may vary, and the moment at which you see the red dotted line may vary, too.

        But your task will always be the same: did the two groups of pictures both have the same picture at the location indicated by red dotted line, or not?
    KeyboardComponent static_key1_12
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent static_instruction_28
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please press any button to see more instructions.
      units = norm
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    PolygonComponent polygon_24
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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  Routine practice_mem_display
    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        Image_1=all_pic_names_training[practice_trial_image_list[practice_trial_index][0]]
        array_image_1d.setImage(Image_1, False)
        array_image_1d.setPos((x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale), False)
        array_image_1d.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_2=all_pic_names_training[practice_trial_image_list[practice_trial_index][1]]
        array_image_2d.setImage(Image_2, False)
        array_image_2d.setPos((x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale), False)
        array_image_2d.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_3=all_pic_names_training[practice_trial_image_list[practice_trial_index][2]]
        array_image_3d.setImage(Image_3, False)
        array_image_3d.setPos((x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale), False)
        array_image_3d.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_4=all_pic_names_training[practice_trial_image_list[practice_trial_index][3]]
        array_image_4d.setImage(Image_4, False)
        array_image_4d.setPos((x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale), False)
        array_image_4d.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_5=all_pic_names_training[practice_trial_image_list[practice_trial_index][4]]
        array_image_5d.setImage(Image_5, False)
        array_image_5d.setPos((x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale), False)
        array_image_5d.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_6=all_pic_names_training[practice_trial_image_list[practice_trial_index][5]]
        array_image_6d.setImage(Image_6, False)
        array_image_6d.setPos((x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale), False)
        array_image_6d.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_7=all_pic_names_training[practice_trial_image_list[practice_trial_index][6]]
        array_image_7d.setImage(Image_7, False)
        array_image_7d.setPos((x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale), False)
        array_image_7d.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_8=all_pic_names_training[practice_trial_image_list[practice_trial_index][7]]
        array_image_8d.setImage(Image_8, False)
        array_image_8d.setPos((x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale), False)
        array_image_8d.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        thisExp.addData('memDisplayOnTimePractice',timer.getTime())

        #storing variables specifying trial
        for image_index in range(8):
            thisExp.addData('mem_image_'+str(image_index)+'_practice',practice_trial_image_list[practice_trial_index][image_index])
      End Routine:
        mem_display_to_cue_duration_s=mem_display_to_cue_times_practice[practice_trial_index]

        if retro_0_post_1_practice[practice_trial_index]:
            mem_display_to_test_array_duration_s=mem_display_to_cue_duration_s-.1
            routine_duration_s=mem_display_to_cue_duration_s+cue_duration_s
            response_time_s = routine_duration_s - cue_duration_s
        else:
            mem_display_to_test_array_duration_s=mem_display_to_cue_duration_s+cue_duration_s+retention_duration_s
            routine_duration_s=mem_display_to_cue_duration_s+cue_duration_s+retention_duration_s
            response_time_s = routine_duration_s

        shuffle(image_index_list_for_shuffling)
        change_from_index_practice=image_index_list_for_shuffling[0]  #create a change_from_index, even when there is no change. So you have somewhere to point the pointer.

        image_index_list_in_order=list(range(0,num_images_per_display))

        change_or_no_practice=change_0_1_practice[practice_trial_index]
        if change_or_no_practice:
            change_to_index_practice=num_images_per_display
            image_index_list_in_order[change_from_index_practice]=change_to_index_practice

        thisExp.addData('retention_interval_practice',mem_display_to_cue_duration_s)
        thisExp.addData('retro_0_post_1_practice',retro_0_post_1_practice[practice_trial_index])
        thisExp.addData('change_or_no_practice',change_or_no_practice)
        thisExp.addData('cue_location_practice',change_from_index_practice)

        thisExp.addData('mem_display_to_test_array_duration_s',mem_display_to_test_array_duration_s)
        thisExp.addData('mem_display_to_cue_duration_s',mem_display_to_cue_duration_s)
        thisExp.addData('routine_duration_s',routine_duration_s)
    ImageComponent array_image_1d
      image [set every repeat] = $Image_1
      pos [set every repeat] = $(x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_2d
      image [set every repeat] = $Image_2
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_3d
      image [set every repeat] = $Image_3
      pos [set every repeat] = $(x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_4d
      image [set every repeat] = $Image_4
      pos [set every repeat] = $(x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_5d
      image [set every repeat] = $Image_5
      pos [set every repeat] = $(x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_6d
      image [set every repeat] = $Image_6
      pos [set every repeat] = $(x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_7d
      image [set every repeat] = $Image_7
      pos [set every repeat] = $(x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_8d
      image [set every repeat] = $Image_8
      pos [set every repeat] = $(x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    PolygonComponent polygon_26
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      units = pix
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  Routine get_ready_practice
    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        if practice_trial_index == 0:
            practice_trial_text = "Get ready for practice trial 1 out of " + str(num_practice_trials)+".\n\nPlease don't forget to keep your eyes on the dot in the middle, and to use your right hand to indicate 'Same' or 'Different' using your index and middle finger, respectively."
        elif practice_trial_index >= num_practice_trials/2.:
            practice_trial_text = "Get ready for practice trial " + str(practice_trial_index+1) + " out of " + str(num_practice_trials)
        else:
            practice_trial_text = "Get ready for practice trial " + str(practice_trial_index+1) + " out of " + str(num_practice_trials)+".\n\nPlease don't forget to keep your eyes on the dot in the middle, and to use your right hand to indicate 'Same' or 'Different' with your index and middle finger, respectively, and then your left hand to indicate your confidence in that choice (ring finger=certain, middle finger=doubt, index finger=guess)."

        static_instruction_29.setText(practice_trial_text,False);
    TextComponent static_instruction_29
      color = black
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $practice_trial_text
      units = norm
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    KeyboardComponent static_key1_13
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent static_instruction_30
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please press any button to start.
      units = norm
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    PolygonComponent polygon_25
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_30
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='none';
  Routine load_practice_trials
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Experiment:
        practice_trial_load_number=0
        practice_trial_image_list = []
        retro_0_post_1_practice = []
        mem_display_to_cue_times_practice = []
        change_0_1_practice = []
      Begin Routine:
        practice_trial_image_list.append([Used_image_1,Used_image_2,Used_image_3,Used_image_4,Used_image_5,Used_image_6,Used_image_7,Used_image_8,Unused_image_1,Unused_image_2])
        if (practice_trial_load_number+1)<=num_practice_trials/2:
            retro_0_post_1_practice.append(0)
            change_0_1_practice.append(0)
        else:
            retro_0_post_1_practice.append(1)
            change_0_1_practice.append(1)

        mem_display_to_cue_times_practice.append(mem_display_to_cue_time_s)
      End Routine:
        practice_trial_load_number=practice_trial_load_number+1

        if practice_trial_load_number>=num_practice_trials:
            trials_2.finished = True

            shuffle(retro_0_post_1_practice)
            shuffle(mem_display_to_cue_times_practice)
            shuffle(change_0_1_practice)

            practice_trial_index=0
            confidence_onset_time_s=0.
            confidence_image_onset_time_s=0.
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  Routine instruction_7
    TextComponent static_instruction_31
      color = black
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        We will start with a few practice trials so that you can see for yourself.

        Before starting the practice trials: here’s one final instruction. During the trials you will see a black dot at the screen center, just like the one you see there now. It is important to keep your eyes directed at that black dot during the trials. So no looking around while a trial is ongoing.
    KeyboardComponent static_key1_14
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent static_instruction_32
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please press any button to begin the practice trials.
      units = norm
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    PolygonComponent polygon_29
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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  Routine confidence_rating_practice
    CodeComponent code_22
      Code Type = Both
      Begin JS Routine:
        if ((practice_trial_index === 0)) {
            confidence_reminder_text = "Excellent. At this point, right after each Same/Different choice, you\u2019re expected to indicate how confident you are that the choice you just made was correct.\n\nPlease use your right hand to press either O, K, or M: three keys that are located above each other on the right part of your keyboard. From top to bottom, O indicates high confidence, K indicates some doubt, and M indicates that your choice was just a guess.";
        } else {
            confidence_reminder_text = "Don't forget: after each Same/Different choice, you should indicate how confident you are in the choice you just made.\n\nPlease use your right hand to press either O (I'm certain), K (I have some doubt), or M (it was just a guess.)";
        }
        text_10.setText(confidence_reminder_text, false);

        trialLetters = ["o", "k", "m"];
        event.clearEvents()
        trialLetter='nothing'
      Begin Routine:
        if practice_trial_index==0:
            confidence_reminder_text='Excellent. At this point, right after each Same/Different choice, you’re expected to indicate how confident you are that the choice you just made was correct.\n\nPlease use your left hand and use your ring finger if you are certain, your middle finger if you have some doubt, or your index finger if it was just a guess. See image below and make your response.'
        else:
            confidence_reminder_text='Don\'t forget: after each Same/Different choice, you should indicate how confident you are in the choice you just made.\n\nPlease use your left hand to press either ring finger (I\'m certain), middle finger (I have some doubt), or index finger (it was just a guess.)'
        text_10.setText(confidence_reminder_text,False)
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);

        keys = event.getKeys();
        if (keys.length) {
            for (var letterIndex = 0, _pj_a = 3; (letterIndex < _pj_a); letterIndex += 1) {
                trialLetter = trialLetters[letterIndex];
                if (_pj.in_es6(trialLetter, keys)) {
                    thisExp.addData("practiceConfidenceKeyPressed", trialLetter);
                    thisExp.addData("confidenceKeyPressedTimePractice", timer.getTime());

                    thisExp.nextEntry();
                    continueRoutine = false;
                }
            }
            if (continueRoutine) {
                thisExp.addData("practiceIllegalKeyPressed", 1); //only reached if none of the letters in trialLetters was a hit
            }
        }
      End JS Routine:
        practice_trial_index = (practice_trial_index + 1);
        confidence_onset_time_s=5;
        confidence_image_onset_time_s=9999999;
      End Routine:
        practice_trial_index = practice_trial_index + 1
    TextComponent text_10
      color = black
      letterHeight = 0.05
      pos = (0, .65)
      startVal [time (s)] = $confidence_onset_time_s
      text [set every repeat] = $confidence_reminder_text
      units = norm
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    KeyboardComponent conf_practice_resp
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = LH_buttonbox.JPG
      pos = (0, -0.1)
      size = (0.35, 0.5)
      startVal [time (s)] = 0.0
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
  Routine instruction_67
    TextComponent static_instruction_37
      color = black
      letterHeight = 0.05
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = To indicate your response you’ll use your right hand; press the left button with your index finger if the two groups of pictures both had the same picture at the location indicated by the red dotted line, or press the right button with your middle finger if two different pictures were shown at that location. See the image below:
      units = norm
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    KeyboardComponent static_key1_17
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent static_instruction_38
      color = black
      letterHeight = 0.05
      pos = (0, -0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        You will not be explicitly prompted when to give your response: you can simply press one of the two response keys as soon as you’ve seen both groups of pictures as well as the red dotted line indicating the location.

        Please press any button to see more instructions.
    ImageComponent SD_image
      image = RH_buttonbox_V1.jpg
      size = (0.4, 0.5)
      startVal [time (s)] = 0.0
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  Routine instruction_67b
    TextComponent static_instruction_39
      color = black
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You will find that some trials are easy, yet that on other trials you have no idea and have to guess. That’s okay: immediately after each Same/Different response you get a chance to indicate how sure you were of that response.
      units = norm
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    KeyboardComponent static_key1_18
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent static_instruction_40
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please press any button to see more instructions.
      units = norm
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    PolygonComponent polygon_37
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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
  Routine blank_at_trial_start
    PolygonComponent polygon_39
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $blank_trial_start_dur_s
      units = pix
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  Routine instructions_specific_training
    TextComponent static_instruction_42
      color = black
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Good. Now that you know the basic idea, let’s get better at the task. Here’s a tip that helps people do well:

        As soon as you see the red dotted line pointing to some spot, immediately try to recall or verbalize what occupied that spot in the first group of pictures. You’ll find that, the faster you try to recall it, the better you do.

        This also means that, if the red dotted line appears earlier than the second group of pictures, don’t wait for that second group to appear! Instead, try to recall what was at the indicated spot right away, before the second group of pictures appears. People who follow that strategy tend to be our best performers.
    PolygonComponent polygon_36
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent static_instruction_43
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please press any button to try out this strategy during a few training trials.
      units = norm
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    KeyboardComponent static_key1_20
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine load_training_trials
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Experiment:
        training_trial_load_number=0
        training_trial_image_list = []
        retro_0_post_1_training = []
        change_0_1_training = []
        consecutive_correct_retro=0
        correct_retro_long_perblock=0
        retro_trials_long_perblock=0
      Begin Routine:
        training_trial_image_list.append([Used_image_1,Used_image_2,Used_image_3,Used_image_4,Used_image_5,Used_image_6,Used_image_7,Used_image_8,Unused_image_1,Unused_image_2])
        if (training_trial_load_number+1)<=max_num_training_trials/2:
            retro_0_post_1_training.append(0)
            change_0_1_training.append(0)
        else:
            retro_0_post_1_training.append(1)
            change_0_1_training.append(1)
      End Routine:
        training_trial_load_number=training_trial_load_number+1

        if training_trial_load_number>=max_num_training_trials:
            trials_4.finished = True
            training_trial_index=0
            training_trial_index_long = 0
            shuffle(retro_0_post_1_training)
            shuffle(change_0_1_training)

        confidence_onset_time_s=0.
        confidence_image_onset_time_s=0.
        mem_display_to_cue_time_training_s=short_retint
  Routine get_ready_training_blockstart
    CodeComponent code_45
      Code Type = Auto->JS
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      Begin Routine:
        if (training_trial_index>0) and (mod(training_trial_index,repeat_intructions_every) == 0):
            block_break_text="You are doing quite well! Don't forget this tip from our best performers:\n\nAs soon as the red dotted line points to a spot, immediately try to recall what was in that spot in the first group of pictures. So if the dotted line appears before the second group of pictures, don't wait for the second group of pictures to appear before recalling what it was.\n\nPlease press any button to continue your training."
            continueRoutine=True
        else:
            block_break_text = ""
            continueRoutine=False

        static_instruction_44.setText(block_break_text,False)
    TextComponent static_instruction_44
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_break_text
      units = norm
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    KeyboardComponent static_key1_21
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine training_mem_display
    CodeComponent code_34
      Code Type = Auto->JS
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      Begin Routine:
        Image_1=all_pic_names_training[training_trial_image_list[training_trial_index][0]]
        array_image_1l.setImage(Image_1, False)
        array_image_1l.setPos((x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale), False)
        array_image_1l.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_2=all_pic_names_training[training_trial_image_list[training_trial_index][1]]
        array_image_2l.setImage(Image_2, False)
        array_image_2l.setPos((x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale), False)
        array_image_2l.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_3=all_pic_names_training[training_trial_image_list[training_trial_index][2]]
        array_image_3l.setImage(Image_3, False)
        array_image_3l.setPos((x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale), False)
        array_image_3l.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_4=all_pic_names_training[training_trial_image_list[training_trial_index][3]]
        array_image_4l.setImage(Image_4, False)
        array_image_4l.setPos((x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale), False)
        array_image_4l.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_5=all_pic_names_training[training_trial_image_list[training_trial_index][4]]
        array_image_5l.setImage(Image_5, False)
        array_image_5l.setPos((x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale), False)
        array_image_5l.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_6=all_pic_names_training[training_trial_image_list[training_trial_index][5]]
        array_image_6l.setImage(Image_6, False)
        array_image_6l.setPos((x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale), False)
        array_image_6l.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_7=all_pic_names_training[training_trial_image_list[training_trial_index][6]]
        array_image_7l.setImage(Image_7, False)
        array_image_7l.setPos((x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale), False)
        array_image_7l.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_8=all_pic_names_training[training_trial_image_list[training_trial_index][7]]
        array_image_8l.setImage(Image_8, False)
        array_image_8l.setPos((x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale), False)
        array_image_8l.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)
        thisExp.addData('memDisplayOnTimeTraining',timer.getTime())

        #storing variables specifying trial
        for image_index in range(num_images_per_display):
            thisExp.addData('mem_image_'+str(image_index)+'_training',training_trial_image_list[training_trial_index][image_index])
      End Routine:
        if (short_block_done == 0):
            mem_display_to_cue_duration_s=mem_display_to_cue_time_training_s
        else:
            if (retro_0_post_1_training[training_trial_index] == 0):
                mem_display_to_cue_duration_s = 1.6
            else:
                shuffle(mem_display_to_cue_time_training_s)
                mem_display_to_cue_duration_s=mem_display_to_cue_time_training_s[0]

        if retro_0_post_1_training[training_trial_index]:
            mem_display_to_test_array_duration_s=mem_display_to_cue_duration_s-.1
            routine_duration_s=mem_display_to_cue_duration_s+cue_duration_s
            response_time_s = routine_duration_s - cue_duration_s
        else:
            mem_display_to_test_array_duration_s=mem_display_to_cue_duration_s+cue_duration_s+retention_duration_s
            routine_duration_s=mem_display_to_cue_duration_s+cue_duration_s+retention_duration_s
            response_time_s = routine_duration_s

        shuffle(image_index_list_for_shuffling)
        change_from_index_training=image_index_list_for_shuffling[0]  #create a change_from_index, even when there is no change. So you have somewhere to point the pointer.

        image_index_list_in_order=list(range(0,num_images_per_display))

        change_or_no_training=change_0_1_training[training_trial_index]
        if change_or_no_training:
            change_to_index_training=num_images_per_display
            image_index_list_in_order[change_from_index_training]=change_to_index_training

        thisExp.addData('retention_interval_training',mem_display_to_cue_duration_s)
        thisExp.addData('retro_0_post_1_training',retro_0_post_1_training[training_trial_index])
        thisExp.addData('change_or_no_training',change_or_no_training)
        thisExp.addData('cue_location_training',change_from_index_training)

        thisExp.addData('mem_display_to_test_array_duration_s',mem_display_to_test_array_duration_s)
        thisExp.addData('mem_display_to_cue_duration_s',mem_display_to_cue_duration_s)
        thisExp.addData('routine_duration_s',routine_duration_s)
    ImageComponent array_image_1l
      image [set every repeat] = $Image_1
      pos [set every repeat] = $(x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_2l
      image [set every repeat] = $Image_2
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_3l
      image [set every repeat] = $Image_3
      pos [set every repeat] = $(x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_4l
      image [set every repeat] = $Image_4
      pos [set every repeat] = $(x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_5l
      image [set every repeat] = $Image_5
      pos [set every repeat] = $(x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_6l
      image [set every repeat] = $Image_6
      pos [set every repeat] = $(x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_7l
      image [set every repeat] = $Image_7
      pos [set every repeat] = $(x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_8l
      image [set every repeat] = $Image_8
      pos [set every repeat] = $(x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale)
      saveStartStop = False
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      texture resolution = 512
      units = pix
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    PolygonComponent polygon_44
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mem_display_duration_s
      units = pix
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  Routine confidence_rating_training
    CodeComponent code_49
      Code Type = Auto->JS
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      End Routine:
        training_trial_index = training_trial_index + 1

        if (short_block_done == 0) and (consecutive_correct_retro == consecutive_retro_correct_required):
            thisExp.addData('finish_training_early',0)
            mem_display_to_cue_time_training_s = varying_long_retints
            consecutive_correct_retro = 0
            short_block_done = 1
        #elif (short_block_done == 0) and (training_trial_index>=max_num_training_trials):
            #thisExp.addData('finish_training_early',1)
            #win.close()
            #core.quit()

        if (short_block_done):
            training_trial_index_long = training_trial_index_long+1
            if (training_trial_index_long>0) and (mod(training_trial_index_long,trials_long_perblock) == 0):
                thisExp.addData('finish_training_early',0)
                long_block_retro_acc = correct_retro_long_perblock/retro_trials_long_perblock
                thisExp.addData('long_block_retro_acc',long_block_retro_acc)
                if(long_block_retro_acc >= 0.8):
                    trials_10.finished = True
                else:
                    training_trial_index_long = 0
                    correct_retro_long_perblock = 0
                    retro_trials_long_perblock = 0
            elif (training_trial_index>=max_num_training_trials) and (long_block_retro_acc<0.8):
                thisExp.addData('finish_training_early',1)
                win.close()
                core.quit()

        thisExp.addData('training_trial_index',training_trial_index)
        thisExp.addData('training_trial_index_long',training_trial_index_long)
    TextComponent text_15
      color = black
      letterHeight = 0.05
      pos = (0, .65)
      startVal [time (s)] = 10
      units = norm
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      text [set every repeat]:
        Don't forget: after each Same/Different choice, you should indicate how confident you are in the choice you just made.

        Please use your left hand, using your ring finger if you're certain, your middle finger if you have doubt, or your index finger if it was just a guess.
    KeyboardComponent conf_training_resp
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine retention_cue_and_test_intval_training
    CodeComponent code_47
      Code Type = Auto->JS
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      Begin Routine:
        Image_1=all_pic_names_training[training_trial_image_list[training_trial_index][image_index_list_in_order[0]]]
        array_image_1m.setImage(Image_1, False)
        array_image_1m.setPos((x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale), False)
        array_image_1m.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_2=all_pic_names_training[training_trial_image_list[training_trial_index][image_index_list_in_order[1]]]
        array_image_2m.setImage(Image_2, False)
        array_image_2m.setPos((x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale), False)
        array_image_2m.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_3=all_pic_names_training[training_trial_image_list[training_trial_index][image_index_list_in_order[2]]]
        array_image_3m.setImage(Image_3, False)
        array_image_3m.setPos((x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale), False)
        array_image_3m.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_4=all_pic_names_training[training_trial_image_list[training_trial_index][image_index_list_in_order[3]]]
        array_image_4m.setImage(Image_4, False)
        array_image_4m.setPos((x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale), False)
        array_image_4m.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_5=all_pic_names_training[training_trial_image_list[training_trial_index][image_index_list_in_order[4]]]
        array_image_5m.setImage(Image_5, False)
        array_image_5m.setPos((x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale), False)
        array_image_5m.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_6=all_pic_names_training[training_trial_image_list[training_trial_index][image_index_list_in_order[5]]]
        array_image_6m.setImage(Image_6, False)
        array_image_6m.setPos((x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale), False)
        array_image_6m.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_7=all_pic_names_training[training_trial_image_list[training_trial_index][image_index_list_in_order[6]]]
        array_image_7m.setImage(Image_7, False)
        array_image_7m.setPos((x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale), False)
        array_image_7m.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_8=all_pic_names_training[training_trial_image_list[training_trial_index][image_index_list_in_order[7]]]
        array_image_8m.setImage(Image_8, False)
        array_image_8m.setPos((x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale), False)
        array_image_8m.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        x_pointer_0=x_y_gains_per_angle[change_from_index_training][0]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*x_scale
        y_pointer_0=x_y_gains_per_angle[change_from_index_training][1]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*y_scale
        pointer_dot_0d.setPos((x_pointer_0, y_pointer_0), False)

        x_pointer_1=x_pointer_0*.66667
        y_pointer_1=y_pointer_0*.66667
        pointer_dot_1d.setPos((x_pointer_1, y_pointer_1), False)

        x_pointer_2=x_pointer_0*.33333
        y_pointer_2=y_pointer_0*.33333
        pointer_dot_2d.setPos((x_pointer_2, y_pointer_2), False)

        #storing variables specifying trial
        for image_index in range(8):
            thisExp.addData('test_image_'+str(image_index)+'_training',training_trial_image_list[training_trial_index][image_index_list_in_order[image_index]])
    PolygonComponent polygon_46
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent array_image_1m
      image [set every repeat] = $Image_1
      pos [set every repeat] = $(x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_2m
      image [set every repeat] = $Image_2
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_3m
      image [set every repeat] = $Image_3
      pos [set every repeat] = $(x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_4m
      image [set every repeat] = $Image_4
      pos [set every repeat] = $(x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_5m
      image [set every repeat] = $Image_5
      pos [set every repeat] = $(x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_6m
      image [set every repeat] = $Image_6
      pos [set every repeat] = $(x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_7m
      image [set every repeat] = $Image_7
      pos [set every repeat] = $(x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_8m
      image [set every repeat] = $Image_8
      pos [set every repeat] = $(x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    PolygonComponent pointer_dot_0d
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 20
      pos [set every repeat] = $(x_pointer_0,y_pointer_0)
      shape = regular polygon...
      size [set every repeat] = $(dot_diam_dva*x_scale/2., dot_diam_dva*y_scale/2.)
      startVal [time (s)] = $mem_display_to_cue_duration_s
      stopVal [duration (s)] = $cue_duration_s
      units = pix
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    PolygonComponent pointer_dot_1d
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 20
      pos [set every repeat] = $(x_pointer_1,y_pointer_1)
      shape = regular polygon...
      size [set every repeat] = $(dot_diam_dva*x_scale/2., dot_diam_dva*y_scale/2.)
      startVal [time (s)] = $mem_display_to_cue_duration_s
      stopVal [duration (s)] = $cue_duration_s
      units = pix
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    PolygonComponent pointer_dot_2d
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 20
      pos [set every repeat] = $(x_pointer_2,y_pointer_2)
      shape = regular polygon...
      size [set every repeat] = $(dot_diam_dva*x_scale/2., dot_diam_dva*y_scale/2.)
      startVal [time (s)] = $mem_display_to_cue_duration_s
      stopVal [duration (s)] = $cue_duration_s
      units = pix
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    TextComponent reminder_training
      color = black
      letterHeight = 0.05
      pos = (0, 0.75)
      startVal [time (s)] = 10
      text = Don’t forget to press S or D for ‘Same’ or ‘Different’. You’ve seen both groups of pictures, as well as the red dotted line indicating the location. If you don’t know the answer just guess; that’s OK.
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    KeyboardComponent sd_training_resp
      allowedKeys = '6','7'
      forceEndRoutine = True
      startVal [time (s)] = $response_time_s
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    CodeComponent response_accuracy_training
      Code Type = Auto->JS
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      Each Frame:
        if len(sd_training_resp.keys):
            if(short_block_done == 0):
                if(retro_0_post_1_training[training_trial_index] == 0):
                    if (change_or_no_training == 0) and (sd_training_resp.keys == '6'):
                        consecutive_correct_retro=consecutive_correct_retro+1
                    else:
                        if (change_or_no_training == 1) and (sd_training_resp.keys == '7'):
                            consecutive_correct_retro=consecutive_correct_retro+1
                        else:
                            consecutive_correct_retro=0
            elif(short_block_done == 1):
                if(retro_0_post_1_training[training_trial_index] == 0):
                    retro_trials_long_perblock = retro_trials_long_perblock + 1
                    if (change_or_no_training == 0) and (sd_training_resp.keys == '6'):
                        correct_retro_long_perblock=correct_retro_long_perblock+1
                    elif (change_or_no_training == 1) and (sd_training_resp.keys == '7'):
                        correct_retro_long_perblock=correct_retro_long_perblock+1

        thisExp.addData('consecutive_correct_retro_short',consecutive_correct_retro)
        thisExp.addData('correct_retro_long_perblock',correct_retro_long_perblock)
        thisExp.addData('retro_trials_long_perblock',retro_trials_long_perblock)
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
  Routine retention_cue_and_test_intval_practice_2
    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        Image_1=all_pic_names_training[practice_trial_image_list[practice_trial_index][image_index_list_in_order[0]]]
        array_image_1f.setImage(Image_1, False)
        array_image_1f.setPos((x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale), False)
        array_image_1f.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_2=all_pic_names_training[practice_trial_image_list[practice_trial_index][image_index_list_in_order[1]]]
        array_image_2f.setImage(Image_2, False)
        array_image_2f.setPos((x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale), False)
        array_image_2f.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_3=all_pic_names_training[practice_trial_image_list[practice_trial_index][image_index_list_in_order[2]]]
        array_image_3f.setImage(Image_3, False)
        array_image_3f.setPos((x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale), False)
        array_image_3f.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_4=all_pic_names_training[practice_trial_image_list[practice_trial_index][image_index_list_in_order[3]]]
        array_image_4f.setImage(Image_4, False)
        array_image_4f.setPos((x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale), False)
        array_image_4f.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_5=all_pic_names_training[practice_trial_image_list[practice_trial_index][image_index_list_in_order[4]]]
        array_image_5f.setImage(Image_5, False)
        array_image_5f.setPos((x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale), False)
        array_image_5f.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_6=all_pic_names_training[practice_trial_image_list[practice_trial_index][image_index_list_in_order[5]]]
        array_image_6f.setImage(Image_6, False)
        array_image_6f.setPos((x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale), False)
        array_image_6f.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_7=all_pic_names_training[practice_trial_image_list[practice_trial_index][image_index_list_in_order[6]]]
        array_image_7f.setImage(Image_7, False)
        array_image_7f.setPos((x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale), False)
        array_image_7f.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        Image_8=all_pic_names_training[practice_trial_image_list[practice_trial_index][image_index_list_in_order[7]]]
        array_image_8f.setImage(Image_8, False)
        array_image_8f.setPos((x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale), False)
        array_image_8f.setSize((image_side_cm*x_scale,image_side_cm*y_scale),False)

        x_pointer_0=x_y_gains_per_angle[change_from_index_practice][0]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*x_scale
        y_pointer_0=x_y_gains_per_angle[change_from_index_practice][1]*pointer_length_relative_to_image_eccentricity*image_eccentr_cm*y_scale
        pointer_dot_0b.setPos((x_pointer_0, y_pointer_0), False)

        x_pointer_1=x_pointer_0*.66667
        y_pointer_1=y_pointer_0*.66667
        pointer_dot_1b.setPos((x_pointer_1, y_pointer_1), False)

        x_pointer_2=x_pointer_0*.33333
        y_pointer_2=y_pointer_0*.33333
        pointer_dot_2b.setPos((x_pointer_2, y_pointer_2), False)
    PolygonComponent polygon_28
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 20
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (dot_diam_dva*x_scale, dot_diam_dva*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent array_image_1f
      image [set every repeat] = $Image_1
      pos [set every repeat] = $(x_y_gains_per_angle[0][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[0][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_2f
      image [set every repeat] = $Image_2
      pos [set every repeat] = $(x_y_gains_per_angle[1][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[1][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_3f
      image [set every repeat] = $Image_3
      pos [set every repeat] = $(x_y_gains_per_angle[2][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[2][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_4f
      image [set every repeat] = $Image_4
      pos [set every repeat] = $(x_y_gains_per_angle[3][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[3][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_5f
      image [set every repeat] = $Image_5
      pos [set every repeat] = $(x_y_gains_per_angle[4][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[4][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_6f
      image [set every repeat] = $Image_6
      pos [set every repeat] = $(x_y_gains_per_angle[5][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[5][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_7f
      image [set every repeat] = $Image_7
      pos [set every repeat] = $(x_y_gains_per_angle[6][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[6][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    ImageComponent array_image_8f
      image [set every repeat] = $Image_8
      pos [set every repeat] = $(x_y_gains_per_angle[7][0]*image_eccentr_cm*x_scale, x_y_gains_per_angle[7][1]*image_eccentr_cm*y_scale)
      size [set every repeat] = $(image_side_cm*x_scale,image_side_cm*y_scale)
      startVal [time (s)] = $mem_display_to_test_array_duration_s
      texture resolution = 512
      units = pix
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    PolygonComponent pointer_dot_0b
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 20
      pos [set every repeat] = $(x_pointer_0,y_pointer_0)
      shape = regular polygon...
      size [set every repeat] = $(dot_diam_dva*x_scale/2., dot_diam_dva*y_scale/2.)
      startVal [time (s)] = $mem_display_to_cue_duration_s
      stopVal [duration (s)] = $cue_duration_s
      units = pix
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    PolygonComponent pointer_dot_1b
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 20
      pos [set every repeat] = $(x_pointer_1,y_pointer_1)
      shape = regular polygon...
      size [set every repeat] = $(dot_diam_dva*x_scale/2., dot_diam_dva*y_scale/2.)
      startVal [time (s)] = $mem_display_to_cue_duration_s
      stopVal [duration (s)] = $cue_duration_s
      units = pix
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    PolygonComponent pointer_dot_2b
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 20
      pos [set every repeat] = $(x_pointer_2,y_pointer_2)
      shape = regular polygon...
      size [set every repeat] = $(dot_diam_dva*x_scale/2., dot_diam_dva*y_scale/2.)
      startVal [time (s)] = $mem_display_to_cue_duration_s
      stopVal [duration (s)] = $cue_duration_s
      units = pix
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    KeyboardComponent sd_practice_resp
      allowedKeys = '6', '7'
      forceEndRoutine = True
      startVal [time (s)] = $response_time_s
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Flow
  Routine Intro
  Routine instruction_1
  Routine instruction_2
  Routine instruction_3
  Routine instruction_4
  Routine instructions_4to5
  Routine instruction_5
  Routine instruction_6
  Routine instruction_67
  Routine instruction_67b
  Routine instruction_7
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $permutation_data_file_string_practice
    isTrials = False
    loopType = random
    nReps = 1
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    Routine load_practice_trials
  LoopTerminator trials_2
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = $num_practice_trials
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    Routine get_ready_practice
    Routine blank_at_trial_start
    Routine practice_mem_display
    Routine retention_cue_and_test_intval_practice_2
    Routine confidence_rating_practice
  LoopTerminator trials
  Routine instructions_specific_training
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = $permutation_data_file_string_practice
    isTrials = False
    loopType = random
    nReps = 1
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    Routine load_training_trials
  LoopTerminator trials_4
  LoopInitiator trials_10 loopType="TrialHandler"
    loopType = sequential
    nReps = max_num_training_trials
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    Routine get_ready_training_blockstart
    Routine blank_at_trial_start
    Routine training_mem_display
    Routine retention_cue_and_test_intval_training
    Routine confidence_rating_training
  LoopTerminator trials_10
  Routine End
